# Generated by Configurator on Tue Jul 11 01:51:38 EDT 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,XYStage,Zaber,XYStage
Device,Stage,Zaber,Stage
Device,Blackfly S BFS-U3-120S4M,SpinnakerCamera,Blackfly S BFS-U3-120S4M
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XYStage,Axis Number (X Axis),1
Property,XYStage,Axis Number (Y Axis),1
Property,XYStage,Controller Device Number,2
Property,XYStage,Controller Device Number (Y Axis),1
Property,XYStage,Linear Motion Per Motor Rev (X Axis) [mm],0.6096
Property,XYStage,Linear Motion Per Motor Rev (Y Axis) [mm],1.2192
Property,XYStage,Lockstep Group (X Axis),0
Property,XYStage,Lockstep Group (Y Axis),0
Property,XYStage,Motor Steps Per Rev (X Axis),200
Property,XYStage,Motor Steps Per Rev (Y Axis),200
Property,XYStage,Port,COM3
Property,Stage,Axis Number,1
Property,Stage,Controller Device Number,3
Property,Stage,Linear Motion Per Motor Rev [mm],0.6096
Property,Stage,Lockstep Group,0
Property,Stage,Motor Steps Per Rev,200
Property,Stage,Port,COM4
Property,Blackfly S BFS-U3-120S4M,Serial Number,22582546

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Stage,1

# Roles
Property,Core,Camera,Blackfly S BFS-U3-120S4M
Property,Core,Focus,Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,Objective-D
Label,DObjective,2,Objective-C
Label,DObjective,1,Objective-B
Label,DObjective,0,Objective-A

# Configuration presets
# Group: Startup
# Preset: Initialization
ConfigGroup,Startup,Initialization,XYStage,TransposeMirrorX,0
ConfigGroup,Startup,Initialization,XYStage,TransposeMirrorY,0
ConfigGroup,Startup,Initialization,Blackfly S BFS-U3-120S4M,ADC Bit Depth,Bit12
ConfigGroup,Startup,Initialization,Blackfly S BFS-U3-120S4M,Gain,18.0280
ConfigGroup,Startup,Initialization,Blackfly S BFS-U3-120S4M,Gain Auto,Off
ConfigGroup,Startup,Initialization,Blackfly S BFS-U3-120S4M,Pixel Format,Mono12p



# PixelSize settings
# Resolution preset: 4x
ConfigPixelSize,4x,DObjective,Label,Objective-A
PixelSize_um,4x,0.9
PixelSizeAffine,4x,0.9,0.0,0.0,0.0,0.9,0.0
# Resolution preset: 10x
ConfigPixelSize,10x,DObjective,Label,Objective-B
PixelSize_um,10x,0.37
PixelSizeAffine,10x,0.37,0.0,0.0,0.0,0.37,0.0

